def model mitochondria as

  def comp Environment as
    var t: millisecond {pub: out};
  enddef;

  def comp ATP as
    var ATP: micromolar {init: 9610.35, pub: out};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var V_AKi: micromole_per_second_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(ATP, time) = (V_ANT-v_MiCK+V_AKi)/1000{dimensionless};
  enddef;

  def comp ADP as
    var ADP: micromolar {init: 113.792, pub: out};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var V_AKi: micromole_per_second_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(ADP, time) = (-(2.0{dimensionless}*V_AKi+V_ANT)+v_MiCK)/1000{dimensionless};
  enddef;

  def comp AMP as
    var AMP: micromolar {init: 13.0731, pub: out};
    var V_AKi: micromole_per_second_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(AMP, time) = V_AKi/1000{dimensionless};
  enddef;

  def comp PCr as
    var PCr: micromolar {init: 11998.6, pub: out};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(PCr, time) = v_MiCK/1000{dimensionless};
  enddef;

  def comp Cr as
    var Cr: micromolar {init: 12001.4, pub: out};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(Cr, time) = -v_MiCK/1000{dimensionless};
  enddef;

  def comp Pi as
    var Pi: micromolar {init: 2306.24, pub: out};
    var V_Pi1: micromole_per_second_per_l_mito {pub: in};
    var time: millisecond {pub: in};
    ode(Pi, time) = -V_Pi1/1000{dimensionless};
  enddef;

  def comp v_MiCK as
    var v_MiCK: micromole_per_second_per_l_mito {pub: out};
    var V1: micromole_per_second_per_l_mito {init: 6.6E3};
    var V11: micromole_per_second_per_l_mito {init: 30.41E3};
    var Kia: micromolar {init: 7.5E2};
    var Kic: micromolar {init: 2.05E2};
    var Kd: micromolar {init: 5.0E2};
    var Kb: micromolar {init: 5.2E3};
    var DenMiCK: dimensionless;
    var Kib: micromolar {init: 2.6E4};
    var Kid: micromolar {init: 1.6E3};
    var KIb: micromolar {init: 2.6E4};
    var PCr: micromolar {pub: in};
    var Cr: micromolar {pub: in};
    var PCr_i: micromolar;
    var Cr_i: micromolar;
    var mATP_i: micromolar {pub: in};
    var mADP_i: micromolar {pub: in};
    var mATP_ig: micromolar {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    PCr_i = PCr/W_i;
    Cr_i = Cr/W_i;
    v_MiCK = 0.5{dimensionless}*(V1*mATP_ig*Cr_i/(Kia*Kb)-V11*mADP_i*PCr_i/(Kic*Kd))/DenMiCK;
    DenMiCK = 1.0{dimensionless}+Cr_i/Kib+PCr_i/Kid+mATP_i/Kia*(1.0{dimensionless}+Cr_i/Kb)+mADP_i/Kic*(1.0{dimensionless}+PCr_i/Kd+Cr_i/KIb);
  enddef;

  def comp ATP_ig as
    var ATP_ig: micromolar {init: 200007.8, pub: out};
    var ATP: micromolar {pub: in};
    var v_MiCK: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var Rexch: dimensionless;
    var time: millisecond {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    Rexch = 0.01{dimensionless};
    ode(ATP_ig, time) = (Rexch*(ATP/W_i-ATP_ig)+V_ANT-v_MiCK)/100{dimensionless};
  enddef;

  def comp fATP_ig as
    var fATP_ig: micromolar {pub: out};
    var KDTi: micromolar {init: 17};
    var ATP_ig: micromolar {pub: in};
    var Mgi: micromolar {pub: in};
    fATP_ig = ATP_ig/(1.0{dimensionless}+Mgi/KDTi);
  enddef;

  def comp mATP_ig as
    var mATP_ig: micromolar {pub: out};
    var ATP_ig: micromolar {pub: in};
    var fATP_ig: micromolar {pub: in};
    mATP_ig = ATP_ig-fATP_ig;
  enddef;

  def comp fADP_i as
    var fADP_i: micromolar {pub: out};
    var KDDi: micromolar {init: 282.0};
    var ADP: micromolar {pub: in};
    var Mgi: micromolar {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    fADP_i = ADP/(W_i*(1.0{dimensionless}+Mgi/KDDi));
  enddef;

  def comp fATP_i as
    var fATP_i: micromolar {pub: out};
    var KDTi: micromolar {init: 17.0};
    var ATP: micromolar {pub: in};
    var Mgi: micromolar {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    fATP_i = ATP/(W_i*(1.0{dimensionless}+Mgi/KDTi));
  enddef;

  def comp mATP_i as
    var mATP_i: micromolar {pub: out};
    var ATP: micromolar {pub: in};
    var fATP_i: micromolar {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    mATP_i = ATP/W_i-fATP_i;
  enddef;

  def comp mADP_i as
    var mADP_i: micromolar {pub: out};
    var ADP: micromolar {pub: in};
    var fADP_i: micromolar {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    mADP_i = ADP/W_i-fADP_i;
  enddef;

  def comp general_constants as
    var R: kilojoule_per_mole_kelvin {init: 0.0083, pub: out};
    var T: kelvin {init: 298.0, pub: out};
    var F: kilojoule_per_mole_millivolt {init: 0.0965, pub: out};
    var u: dimensionless {init: 0.861, pub: out};
    var eta: dimensionless {init: 10E6, pub: out};
    var na: dimensionless {init: 2.5, pub: out};
    var param: dimensionless {init: 20, pub: out};
  enddef;

  def comp Fixed_parameters as
    var RT: kilojoule_per_mole {init: 2.4734, pub: out};
    var F: kilojoule_per_mole_per_millivolt {init: 0.096484, pub: out};
    var n_A: dimensionless {init: 3, pub: out};
    var dG_C1o: kilojoule_per_mole {init: -69.37, pub: out};
    var dG_C3o: kilojoule_per_mole {init: -32.53, pub: out};
    var dG_C4o: kilojoule_per_mole {init: -122.94, pub: out};
    var dG_F1o: kilojoule_per_mole {init: 36.03, pub: out};
    var pH_e: dimensionless {init: 7.1, pub: out};
    var H_e: micromolar {pub: out};
    var K_e: micromolar {init: 0.15e6, pub: out};
    var ATP_e: micromolar {init: 0, pub: out};
    var AMP_e: micromolar {init: 0, pub: out};
    var k_dHPi: micromolar {pub: out};
    var k_dHatp: micromolar {pub: out};
    var k_dHadp: micromolar {pub: out};
    var K_DT: micromolar {init: 2.4e1, pub: out};
    var K_DD: micromolar {init: 3.47e2, pub: out};
    var K_AK: dimensionless {init: 0.4331, pub: out};
    var W_m: l_water_per_l_mito {init: 0.72376, pub: out};
    var W_x: l_water_per_l_mito {pub: out};
    var W_i: l_water_per_l_mito {pub: out};
    var gamma: per_micron {init: 5.99, pub: out};
    var Ctot: micromolar {init: 0.0027e6, pub: out};
    var Qtot: micromolar {init: 0.00135e6, pub: out};
    var NADtot: micromolar {init: 0.00297e6, pub: out};
    var H_i: micromolar {pub: out};
    var K_i: micromolar {pub: out};
    H_e = 1e6{micromolar}*pow(10{dimensionless}, -pH_e);
    W_x = 0.9{dimensionless}*W_m;
    W_i = 0.1{dimensionless}*W_m;
    H_i = H_e;
    K_i = K_e;
    k_dHPi = 1e6{micromolar}*pow(10{dimensionless}, -6.75{dimensionless});
    k_dHatp = 1e6{micromolar}*pow(10{dimensionless}, -6.48{dimensionless});
    k_dHadp = 1e6{micromolar}*pow(10{dimensionless}, -6.29{dimensionless});
  enddef;

  def comp Adjustable_parameters as
    var k_Pi1: micromolar {init: 1.3413e2, pub: out};
    var k_Pi2: micromolar {init: 6.7668e2, pub: out};
    var k_Pi3: micromolar {init: 1.9172e2, pub: out};
    var k_Pi4: micromolar {init: 0.02531e6, pub: out};
    var k_PiH: micromolar {init: 4.5082e2, pub: out};
    var r: dimensionless {init: 4.5807, pub: out};
    var x_DH: micromole_per_second_per_l_mito_per_micromolar {init: 0.09183, pub: out};
    var x_C1: micromole_per_second_per_l_mito_per_micromolar {init: 0.1063, pub: out};
    var x_C3: micromole_per_second_per_l_mito_per_micromolar {init: 0.091737, pub: out};
    var x_C4: micromole_per_second_per_l_mito_per_micromolar {init: 3.2562e-5, pub: out};
    var x_F1: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {init: 0.0410e-6, pub: out};
    var x_ANT: micromole_per_second_per_l_mito {init: 12.0e3, pub: out};
    var x_Pi1: micromole_per_second_per_l_mito_per_micromolar {init: 339430, pub: out};
    var x_KH: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {init: 2.9802e1, pub: out};
    var x_Hle: micromole_per_second_per_l_mito_per_micromolar_per_millivolt {init: 437.8554, pub: out};
    var x_K: micromole_per_second_per_l_mito_per_micromolar_per_millivolt {init: 0, pub: out};
    var k_mADP_i: micromolar {init: 3.5e0, pub: out};
    var x_AK: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {init: 0, pub: out};
    var p_A: micron_per_second {init: 85, pub: out};
    var k_O2: micromolar {init: 1.2e2, pub: out};
    var x_buff: per_micromolar {init: 100e-6, pub: out};
    var x_Pi2: micron_per_second {init: 327, pub: out};
  enddef;

  def comp Proton_motive_force as
    var dG_H: kilojoule_per_mole {pub: out};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var H_i: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    dG_H = F*dPsi+RT*ln(H_i/H_x);
  enddef;

  def comp Dehydrogenase_flux as
    var V_DH: micromole_per_second_per_l_mito {pub: out};
    var x_DH: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var k_Pi1: micromolar {pub: in};
    var k_Pi2: micromolar {pub: in};
    var r: dimensionless {pub: in};
    var NAD_x: micromolar {pub: in};
    var NADH_x: micromolar {pub: in};
    var Pi_x: micromolar {pub: in};
    V_DH = x_DH*(r*NAD_x-NADH_x)*(1{dimensionless}+Pi_x/k_Pi1)/(1{dimensionless}+Pi_x/k_Pi2);
  enddef;

  def comp Electron_flux_complex_I as
    var V_C1: micromole_per_second_per_l_mito {pub: out};
    var x_C1: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var dG_C1op: kilojoule_per_mole;
    var dG_C1o: kilojoule_per_mole {pub: in};
    var NADH_x: micromolar {pub: in};
    var NAD_x: micromolar {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var Q: micromolar {pub: in};
    var QH2: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    dG_C1op = dG_C1o-RT*ln(H_x*10{per_micromolar})-RT*ln(Q/QH2);
    V_C1 = x_C1*(exp(-(dG_C1op+4{dimensionless}*dG_H)/RT)*NADH_x-NAD_x);
  enddef;

  def comp Electron_flux_complex_III as
    var V_C3: micromole_per_second_per_l_mito {pub: out};
    var k_Pi3: micromolar {pub: in};
    var k_Pi4: micromolar {pub: in};
    var x_C3: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var dG_C3op: kilojoule_per_mole;
    var dG_C3o: kilojoule_per_mole {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var Cox: micromolar {pub: in};
    var Cred: micromolar {pub: in};
    var Q: micromolar {pub: in};
    var QH2: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    var Pi_x: micromolar {pub: in};
    dG_C3op = dG_C3o+2{dimensionless}*RT*ln(H_x*10{per_micromolar})-RT*ln(QH2/Q);
    V_C3 = x_C3*(1{dimensionless}+Pi_x/k_Pi3)/(1{dimensionless}+Pi_x/k_Pi4)*(exp(-(dG_C3op+4{dimensionless}*dG_H-2{dimensionless}*F*dPsi)/(2{dimensionless}*RT))*Cox-Cred);
  enddef;

  def comp Electron_flux_complex_IV as
    var V_C4: micromole_per_second_per_l_mito {pub: out};
    var k_O2: micromolar {pub: in};
    var x_C4: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var dG_C4op: kilojoule_per_mole;
    var dG_C4o: kilojoule_per_mole {pub: in};
    var Cred: micromolar {pub: in};
    var Ctot: micromolar {pub: in};
    var O2: micromolar {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var Cox: micromolar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var H_x: micromolar {pub: in};
    dG_C4op = dG_C4o-2{dimensionless}*RT*ln(H_x*10{per_micromolar})-RT/2{dimensionless}*ln(O2/1e6{micromolar});
    V_C4 = x_C4/(1{dimensionless}+k_O2/O2)*Cred/Ctot*(exp(-(dG_C4op+2{dimensionless}*dG_H)/(2{dimensionless}*RT))*Cred-Cox*exp(F*dPsi/RT));
  enddef;

  def comp ATP_synthesis_flux as
    var V_F1: micromole_per_second_per_l_mito {pub: out};
    var x_F1: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {pub: in};
    var dG_F1o: kilojoule_per_mole {pub: in};
    var K_DD: micromolar {pub: in};
    var K_DT: micromolar {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var n_A: dimensionless {pub: in};
    var dG_H: kilojoule_per_mole {pub: in};
    var mADP_x: micromolar {pub: in};
    var Pi_x: micromolar {pub: in};
    var mATP_x: micromolar {pub: in};
    V_F1 = x_F1*(exp(-(dG_F1o-n_A*dG_H)/RT)*K_DD/K_DT*mADP_x*Pi_x-mATP_x*1e6{molar});
  enddef;
  def map between ATP_synthesis_flux and ANT_flux for
    vars V_F1 and V_F1;
  enddef;

  def comp ANT_flux as
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: out};
    var Psi_x: millivolt {pub: out};
    var Psi_i: millivolt {pub: out};
    var x_ANT: micromole_per_second_per_l_mito {pub: in};
    var fADP_i: micromolar {pub: in};
    var fATP_i: micromolar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var dPsi: millivolt {pub: in};
    var fADP_x: micromolar {pub: in};
    var fATP_x: micromolar {pub: in};
    var k_mADP_i: micromolar {pub: in};
    var mincond: micromolar {init: 1e-6};
    Psi_x = -0.65{dimensionless}*dPsi;
    Psi_i = 0.35{dimensionless}*dPsi;
    V_ANT = sel
      case fADP_i > mincond:
        x_ANT*(fADP_i/(fADP_i+fATP_i*exp(-F*Psi_i/RT))-fADP_x/(fADP_x+fATP_x*exp(-F*Psi_x/RT)))*fADP_i/(k_mADP_i+fADP_i);
      case fATP_i > mincond:
        x_ANT*(fADP_i/(fADP_i+fATP_i*exp(-F*Psi_i/RT))-fADP_x/(fADP_x+fATP_x*exp(-F*Psi_x/RT)))*fADP_i/(k_mADP_i+fADP_i);
      otherwise:
        0{micromole_per_second_per_l_mito};
    endsel;
  enddef;

  def comp Phosphate_hydrogen_cotransporter_flux as
    var V_Pi1: micromole_per_second_per_l_mito {pub: out};
    var H2Pi: micromolar {pub: out};
    var H2PIx: micromolar {pub: out};
    var Pi: micromolar {pub: in};
    var H_i: micromolar {pub: in};
    var k_dHPi: micromolar {pub: in};
    var Pi_x: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    var x_Pi1: micromole_per_second_per_l_mito_per_micromolar {pub: in};
    var k_PiH: micromolar {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var Pi_i: micromolar;
    Pi_i = Pi/W_i;
    H2Pi = Pi_i*H_i/(H_i+k_dHPi);
    H2PIx = Pi_x*H_x/(H_x+k_dHPi);
    V_Pi1 = x_Pi1*(H_x*H2Pi-H_i*H2PIx)/(H2Pi+k_PiH);
  enddef;

  def comp Adenylate_kinase_flux as
    var V_AKi: micromole_per_second_per_l_mito {pub: out};
    var kfa: second_order_rate_constant {init: 63.8};
    var kba: second_order_rate_constant {init: 1.68};
    var fADP_i: micromolar {pub: in};
    var mATP_i: micromolar {pub: in};
    var AMP: micromolar {pub: in};
    var mADP_i: micromolar {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var AMP_i: micromolar;
    AMP_i = AMP/W_i;
    V_AKi = (kfa*fADP_i*mADP_i-kba*mATP_i*AMP_i)/100{dimensionless};
  enddef;

  def comp Hydrogen_leak_flux as
    var V_Hle: micromole_per_second_per_l_mito {pub: out};
    var x_Hle: micromole_per_second_per_l_mito_per_micromolar_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var H_i: micromolar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var H_x: micromolar {pub: in};
    V_Hle = x_Hle*dPsi*(H_i*exp(F*dPsi/RT)-H_x)/(exp(F*dPsi/RT)-1{dimensionless});
  enddef;

  def comp Passive_potassium_flux as
    var V_K: micromole_per_second_per_l_mito {pub: out};
    var x_K: micromole_per_second_per_l_mito_per_micromolar_per_millivolt {pub: in};
    var dPsi: millivolt {pub: in};
    var K_i: micromolar {pub: in};
    var F: kilojoule_per_mole_per_millivolt {pub: in};
    var RT: kilojoule_per_mole {pub: in};
    var K_x: micromolar {pub: in};
    V_K = x_K*dPsi*(K_i*exp(F*dPsi/RT)-K_x)/(exp(F*dPsi/RT)-1{dimensionless});
  enddef;

  def comp Potassium_hydrogen_flux as
    var V_KH: micromole_per_second_per_l_mito {pub: out};
    var x_KH: micromole_per_second_per_l_mito_per_micromolar_per_micromolar {pub: in};
    var K_i: micromolar {pub: in};
    var K_x: micromolar {pub: in};
    var H_i: micromolar {pub: in};
    var H_x: micromolar {pub: in};
    V_KH = x_KH*(K_i*H_x-K_x*H_i);
  enddef;

  def comp NAD_x_concentration as
    var NAD_x: micromolar {pub: out};
    var NADH_x: micromolar {pub: in};
    var NADtot: micromolar {pub: in};
    NAD_x = NADtot-NADH_x;
  enddef;

  def comp Q_concentration as
    var Q: micromolar {pub: out};
    var Qtot: micromolar {pub: in};
    var QH2: micromolar {pub: in};
    Q = Qtot-QH2;
  enddef;

  def comp Cox_concentration as
    var Cox: micromolar {pub: out};
    var Ctot: micromolar {pub: in};
    var Cred: micromolar {pub: in};
    Cox = Ctot-Cred;
  enddef;

  def comp dH_x_dt as
    var H_x: micromolar {init: 0.0725301, pub: out};
    var x_buff: per_micromolar {pub: in};
    var V_DH: micromole_per_second_per_l_mito {pub: in};
    var V_C1: micromole_per_second_per_l_mito {pub: in};
    var V_C3: micromole_per_second_per_l_mito {pub: in};
    var V_C4: micromole_per_second_per_l_mito {pub: in};
    var n_A: dimensionless {pub: in};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_Pi1: micromole_per_second_per_l_mito {pub: in};
    var V_Hle: micromole_per_second_per_l_mito {pub: in};
    var V_KH: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(H_x, t) = x_buff*H_x*(V_DH-5{dimensionless}*V_C1-2{dimensionless}*V_C3-4{dimensionless}*V_C4+(n_A-1{dimensionless})*V_F1+2{dimensionless}*V_Pi1+V_Hle-V_KH)/(W_x*1000{dimensionless});
  enddef;

  def comp dK_x_dt as
    var K_x: micromolar {init: 137085, pub: out};
    var V_KH: micromole_per_second_per_l_mito {pub: in};
    var V_K: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(K_x, t) = (V_KH+V_K)/(W_x*1000{dimensionless});
  enddef;

  def comp dNADH_x_dt as
    var NADH_x: micromolar {init: 1552.31, pub: out};
    var V_DH: micromole_per_second_per_l_mito {pub: in};
    var V_C1: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(NADH_x, t) = (V_DH-V_C1)/(W_x*1000{dimensionless});
  enddef;

  def comp dQH2_dt as
    var QH2: micromolar {init: 597.711, pub: out};
    var V_C1: micromole_per_second_per_l_mito {pub: in};
    var V_C3: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(QH2, t) = (V_C1-V_C3)/(W_x*1000{dimensionless});
  enddef;

  def comp dCred_dt as
    var Cred: micromolar {init: 439.884, pub: out};
    var V_C3: micromole_per_second_per_l_mito {pub: in};
    var V_C4: micromole_per_second_per_l_mito {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    ode(Cred, t) = (2{dimensionless}*V_C3-2{dimensionless}*V_C4)/(W_i*1000{dimensionless});
  enddef;

  def comp dATP_x_dt as
    var ATP_x: micromolar {init: 8964.91, pub: out};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    var ATP_xx: micromolar {pub: out};
    ATP_xx = ATP_x;
    ode(ATP_x, t) = (V_F1-V_ANT)/(W_x*1000{dimensionless});
  enddef;

  def comp dADP_x_dt as
    var ADP_x: micromolar {init: 1035.09, pub: out};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    var ADP_xx: micromolar {pub: out};
    ADP_xx = ADP_x;
    ode(ADP_x, t) = (-V_F1+V_ANT)/(W_x*1000{dimensionless});
  enddef;

  def comp dPi_x_dt as
    var Pi_x: micromolar {init: 2058.61, pub: out};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_Pi1: micromole_per_second_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    var Pi_xx: micromolar {pub: out};
    Pi_xx = Pi_x;
    ode(Pi_x, t) = (-V_F1+V_Pi1)/(W_x*1000{dimensionless});
  enddef;

  def comp dPsi_dt as
    var dPsi: millivolt {init: 174.993, pub: out};
    var V_C1: micromole_per_second_per_l_mito {pub: in};
    var V_C3: micromole_per_second_per_l_mito {pub: in};
    var V_C4: micromole_per_second_per_l_mito {pub: in};
    var n_A: dimensionless {pub: in};
    var V_F1: micromole_per_second_per_l_mito {pub: in};
    var V_ANT: micromole_per_second_per_l_mito {pub: in};
    var V_Hle: micromole_per_second_per_l_mito {pub: in};
    var V_K: micromole_per_second_per_l_mito {pub: in};
    var t: millisecond {pub: in};
    var C_im: mole_per_l_mito_per_millivolt {init: 6.756756756756757};
    ode(dPsi, t) = (4{dimensionless}*V_C1+2{dimensionless}*V_C3+4{dimensionless}*V_C4-n_A*V_F1-V_ANT-V_Hle-V_K)/(C_im*1000{dimensionless});
  enddef;

  def comp dO2_dt as
    var O2: micromolar {init: 2.6e1, pub: out};
    var t: millisecond {pub: in};
    var W_i: l_water_per_l_mito {pub: in};
    var W_x: l_water_per_l_mito {pub: in};
    var V_VO2: micromole_per_second_per_l_mito;
    var V_C4: micromole_per_second_per_l_mito {pub: in};
    V_VO2 = V_C4/2{dimensionless};
    // ode(O2, t) = -V_C4/(2{dimensionless}*1000{dimensionless});
    ode(O2, t) = 0{dimensionless};
  enddef;

  def comp fATP_x as
    var fATP_x: micromolar {pub: out};
    var KDTx: micromolar {init: 17.0};
    var ATPx: micromolar {pub: in};
    var Mgx: micromolar {pub: in};
    fATP_x = ATPx/(1.0{dimensionless}+Mgx/KDTx);
  enddef;

  def comp mATP_x as
    var mATP_x: micromolar {pub: out};
    var ATPx: micromolar {pub: in};
    var fATP_x: micromolar {pub: in};
    mATP_x = ATPx-fATP_x;
  enddef;

  def comp mADP_x as
    var mADP_x: micromolar {pub: out};
    var ADPx: micromolar {pub: in};
    var fADP_x: micromolar {pub: in};
    mADP_x = ADPx-fADP_x;
  enddef;

  def comp fADP_x as
    var fADP_x: micromolar {pub: out};
    var KDDx: micromolar {init: 282.0};
    var ADPx: micromolar {pub: in};
    var Mgx: micromolar {pub: in};
    fADP_x = ADPx/(1.0{dimensionless}+Mgx/KDDx);
  enddef;

  def comp Mg_buffering as
    var Mgi: micromolar {init: 380.0, pub: out};
    var Mgext: micromolar {init: 1.0E3, pub: out};
    var Mgx: micromolar {init: 380.0, pub: out};
  enddef;
  def map between fATP_x and dATP_x_dt for
    vars ATPx and ATP_x;
  enddef;
  def map between fATP_x and Mg_buffering for
    vars Mgx and Mgx;
  enddef;
  def map between ATP and ANT_flux for
    vars V_ANT and V_ANT;
  enddef;
  def map between ATP and v_MiCK for
    vars v_MiCK and v_MiCK;
  enddef;
  def map between v_MiCK and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between ADP and v_MiCK for
    vars v_MiCK and v_MiCK;
  enddef;
  def map between mATP_i and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between mADP_i and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between fATP_i and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between ATP_ig and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between fADP_i and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between Phosphate_hydrogen_cotransporter_flux and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between Adenylate_kinase_flux and Fixed_parameters for
    vars W_i and W_i;
  enddef;
  def map between v_MiCK and PCr for
    vars PCr and PCr;
    vars v_MiCK and v_MiCK;
  enddef;
  def map between v_MiCK and Cr for
    vars Cr and Cr;
    vars v_MiCK and v_MiCK;
  enddef;
  def map between v_MiCK and mATP_i for
    vars mATP_i and mATP_i;
  enddef;
  def map between v_MiCK and mADP_i for
    vars mADP_i and mADP_i;
  enddef;
  def map between fATP_i and ATP for
    vars ATP and ATP;
  enddef;
  def map between fATP_i and Mg_buffering for
    vars Mgi and Mgi;
  enddef;
  def map between mATP_i and fATP_i for
    vars fATP_i and fATP_i;
  enddef;
  def map between mATP_i and ATP for
    vars ATP and ATP;
  enddef;
  def map between fADP_i and ADP for
    vars ADP and ADP;
  enddef;
  def map between fADP_i and Mg_buffering for
    vars Mgi and Mgi;
  enddef;
  def map between mADP_i and fADP_i for
    vars fADP_i and fADP_i;
  enddef;
  def map between mADP_i and ADP for
    vars ADP and ADP;
  enddef;
  def map between fATP_ig and ATP_ig for
    vars ATP_ig and ATP_ig;
  enddef;
  def map between fATP_ig and Mg_buffering for
    vars Mgi and Mgi;
  enddef;
  def map between mATP_ig and fATP_ig for
    vars fATP_ig and fATP_ig;
  enddef;
  def map between mATP_ig and ATP_ig for
    vars ATP_ig and ATP_ig;
  enddef;
  def map between mATP_ig and v_MiCK for
    vars mATP_ig and mATP_ig;
  enddef;
  def map between v_MiCK and ATP_ig for
    vars v_MiCK and v_MiCK;
  enddef;
  def map between ATP and ATP_ig for
    vars ATP and ATP;
  enddef;
  def map between ANT_flux and ATP_ig for
    vars V_ANT and V_ANT;
  enddef;
  def map between Environment and ATP_ig for
    vars t and time;
  enddef;
  def map between Environment and ATP for
    vars t and time;
  enddef;
  def map between Environment and ADP for
    vars t and time;
  enddef;
  def map between Environment and AMP for
    vars t and time;
  enddef;
  def map between Environment and PCr for
    vars t and time;
  enddef;
  def map between Environment and Cr for
    vars t and time;
  enddef;
  def map between Environment and Pi for
    vars t and time;
  enddef;
  def map between mATP_x and fATP_x for
    vars fATP_x and fATP_x;
  enddef;
  def map between mATP_x and dATP_x_dt for
    vars ATPx and ATP_x;
  enddef;
  def map between mADP_x and fADP_x for
    vars fADP_x and fADP_x;
  enddef;
  def map between mADP_x and dADP_x_dt for
    vars ADPx and ADP_x;
  enddef;
  def map between fADP_x and dADP_x_dt for
    vars ADPx and ADP_x;
  enddef;
  def map between fADP_x and Mg_buffering for
    vars Mgx and Mgx;
  enddef;
  def map between Fixed_parameters and Proton_motive_force for
    vars F and F;
    vars RT and RT;
    vars H_i and H_i;
  enddef;
  def map between dPsi_dt and Proton_motive_force for
    vars dPsi and dPsi;
  enddef;
  def map between dH_x_dt and Proton_motive_force for
    vars H_x and H_x;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_I for
    vars dG_C1o and dG_C1o;
    vars RT and RT;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_I for
    vars x_C1 and x_C1;
  enddef;
  def map between Q_concentration and Electron_flux_complex_I for
    vars Q and Q;
  enddef;
  def map between dQH2_dt and Electron_flux_complex_I for
    vars QH2 and QH2;
    vars V_C1 and V_C1;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_I for
    vars H_x and H_x;
    vars V_C1 and V_C1;
  enddef;
  def map between dNADH_x_dt and Electron_flux_complex_I for
    vars NADH_x and NADH_x;
    vars V_C1 and V_C1;
  enddef;
  def map between NAD_x_concentration and Electron_flux_complex_I for
    vars NAD_x and NAD_x;
  enddef;
  def map between Proton_motive_force and Electron_flux_complex_I for
    vars dG_H and dG_H;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_III for
    vars H_x and H_x;
    vars V_C3 and V_C3;
  enddef;
  def map between Q_concentration and Electron_flux_complex_III for
    vars Q and Q;
  enddef;
  def map between dQH2_dt and Electron_flux_complex_III for
    vars QH2 and QH2;
    vars V_C3 and V_C3;
  enddef;
  def map between dPi_x_dt and Electron_flux_complex_III for
    vars Pi_x and Pi_x;
  enddef;
  def map between Cox_concentration and Electron_flux_complex_III for
    vars Cox and Cox;
  enddef;
  def map between dCred_dt and Electron_flux_complex_III for
    vars Cred and Cred;
    vars V_C3 and V_C3;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_III for
    vars k_Pi3 and k_Pi3;
    vars k_Pi4 and k_Pi4;
    vars x_C3 and x_C3;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_III for
    vars dG_C3o and dG_C3o;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between Fixed_parameters and Electron_flux_complex_IV for
    vars dG_C4o and dG_C4o;
    vars F and F;
    vars RT and RT;
    vars Ctot and Ctot;
  enddef;
  def map between Adjustable_parameters and Electron_flux_complex_IV for
    vars k_O2 and k_O2;
    vars x_C4 and x_C4;
  enddef;
  def map between dH_x_dt and Electron_flux_complex_IV for
    vars H_x and H_x;
    vars V_C4 and V_C4;
  enddef;
  def map between dO2_dt and Electron_flux_complex_IV for
    vars O2 and O2;
    vars V_C4 and V_C4;
  enddef;
  def map between Fixed_parameters and dO2_dt for
    vars W_i and W_i;
    vars W_x and W_x;
  enddef;
  def map between dCred_dt and Electron_flux_complex_IV for
    vars Cred and Cred;
    vars V_C4 and V_C4;
  enddef;
  def map between Cox_concentration and Electron_flux_complex_IV for
    vars Cox and Cox;
  enddef;
  def map between dPsi_dt and Electron_flux_complex_IV for
    vars dPsi and dPsi;
    vars V_C4 and V_C4;
  enddef;
  def map between Adjustable_parameters and ATP_synthesis_flux for
    vars x_F1 and x_F1;
  enddef;
  def map between Fixed_parameters and ATP_synthesis_flux for
    vars K_DD and K_DD;
    vars K_DT and K_DT;
    vars RT and RT;
    vars n_A and n_A;
    vars dG_F1o and dG_F1o;
  enddef;
  def map between Proton_motive_force and ATP_synthesis_flux for
    vars dG_H and dG_H;
  enddef;
  def map between mADP_x and ATP_synthesis_flux for
    vars mADP_x and mADP_x;
  enddef;
  def map between mATP_x and ATP_synthesis_flux for
    vars mATP_x and mATP_x;
  enddef;
  def map between dPi_x_dt and ATP_synthesis_flux for
    vars Pi_x and Pi_x;
    vars V_F1 and V_F1;
  enddef;
  def map between Adjustable_parameters and Dehydrogenase_flux for
    vars x_DH and x_DH;
    vars k_Pi1 and k_Pi1;
    vars k_Pi2 and k_Pi2;
    vars r and r;
  enddef;
  def map between Dehydrogenase_flux and NAD_x_concentration for
    vars NAD_x and NAD_x;
  enddef;
  def map between dNADH_x_dt and Dehydrogenase_flux for
    vars NADH_x and NADH_x;
    vars V_DH and V_DH;
  enddef;
  def map between dPi_x_dt and Dehydrogenase_flux for
    vars Pi_x and Pi_x;
  enddef;
  def map between Adjustable_parameters and ANT_flux for
    vars x_ANT and x_ANT;
    vars k_mADP_i and k_mADP_i;
  enddef;
  def map between Fixed_parameters and ANT_flux for
    vars F and F;
    vars RT and RT;
  enddef;
  def map between fATP_x and ANT_flux for
    vars fATP_x and fATP_x;
  enddef;
  def map between fADP_x and ANT_flux for
    vars fADP_x and fADP_x;
  enddef;
  def map between fATP_i and ANT_flux for
    vars fATP_i and fATP_i;
  enddef;
  def map between fADP_i and ANT_flux for
    vars fADP_i and fADP_i;
  enddef;
  def map between dPsi_dt and ANT_flux for
    vars dPsi and dPsi;
    vars V_ANT and V_ANT;
  enddef;
  def map between dH_x_dt and Phosphate_hydrogen_cotransporter_flux for
    vars H_x and H_x;
    vars V_Pi1 and V_Pi1;
  enddef;
  def map between Pi and Phosphate_hydrogen_cotransporter_flux for
    vars Pi and Pi;
    vars V_Pi1 and V_Pi1;
  enddef;
  def map between dPi_x_dt and Phosphate_hydrogen_cotransporter_flux for
    vars Pi_x and Pi_x;
    vars V_Pi1 and V_Pi1;
  enddef;
  def map between Fixed_parameters and Phosphate_hydrogen_cotransporter_flux for
    vars H_i and H_i;
    vars k_dHPi and k_dHPi;
  enddef;
  def map between Adjustable_parameters and Phosphate_hydrogen_cotransporter_flux for
    vars x_Pi1 and x_Pi1;
    vars k_PiH and k_PiH;
  enddef;
  def map between Adjustable_parameters and Hydrogen_leak_flux for
    vars x_Hle and x_Hle;
  enddef;
  def map between Fixed_parameters and Hydrogen_leak_flux for
    vars F and F;
    vars H_i and H_i;
    vars RT and RT;
  enddef;
  def map between dPsi_dt and Hydrogen_leak_flux for
    vars dPsi and dPsi;
    vars V_Hle and V_Hle;
  enddef;
  def map between dH_x_dt and Hydrogen_leak_flux for
    vars H_x and H_x;
    vars V_Hle and V_Hle;
  enddef;
  def map between Fixed_parameters and Potassium_hydrogen_flux for
    vars K_i and K_i;
    vars H_i and H_i;
  enddef;
  def map between Adjustable_parameters and Potassium_hydrogen_flux for
    vars x_KH and x_KH;
  enddef;
  def map between dK_x_dt and Potassium_hydrogen_flux for
    vars K_x and K_x;
    vars V_KH and V_KH;
  enddef;
  def map between dH_x_dt and Potassium_hydrogen_flux for
    vars H_x and H_x;
    vars V_KH and V_KH;
  enddef;
  def map between Fixed_parameters and Passive_potassium_flux for
    vars K_i and K_i;
    vars F and F;
    vars RT and RT;
  enddef;
  def map between Adjustable_parameters and Passive_potassium_flux for
    vars x_K and x_K;
  enddef;
  def map between dPsi_dt and Passive_potassium_flux for
    vars dPsi and dPsi;
    vars V_K and V_K;
  enddef;
  def map between dK_x_dt and Passive_potassium_flux for
    vars K_x and K_x;
    vars V_K and V_K;
  enddef;
  def map between ADP and Adenylate_kinase_flux for
    vars V_AKi and V_AKi;
  enddef;
  def map between AMP and Adenylate_kinase_flux for
    vars AMP and AMP;
    vars V_AKi and V_AKi;
  enddef;
  def map between ATP and Adenylate_kinase_flux for
    vars V_AKi and V_AKi;
  enddef;
  def map between fADP_i and Adenylate_kinase_flux for
    vars fADP_i and fADP_i;
  enddef;
  def map between mADP_i and Adenylate_kinase_flux for
    vars mADP_i and mADP_i;
  enddef;
  def map between mATP_i and Adenylate_kinase_flux for
    vars mATP_i and mATP_i;
  enddef;
  def map between Environment and dH_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dH_x_dt for
    vars n_A and n_A;
    vars W_x and W_x;
  enddef;
  def map between Adjustable_parameters and dH_x_dt for
    vars x_buff and x_buff;
  enddef;
  def map between Dehydrogenase_flux and dH_x_dt for
    vars V_DH and V_DH;
  enddef;
  def map between ATP_synthesis_flux and dH_x_dt for
    vars V_F1 and V_F1;
  enddef;
  def map between dK_x_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dK_x_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dNADH_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dNADH_x_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dQH2_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dQH2_dt for
    vars W_x and W_x;
  enddef;
  def map between Environment and dCred_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dCred_dt for
    vars W_i and W_i;
  enddef;
  def map between Environment and dO2_dt for
    vars t and t;
  enddef;
  def map between Environment and dATP_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dATP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between ATP_synthesis_flux and dATP_x_dt for
    vars V_F1 and V_F1;
  enddef;
  def map between dATP_x_dt and ANT_flux for
    vars V_ANT and V_ANT;
  enddef;
  def map between Environment and dADP_x_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dADP_x_dt for
    vars W_x and W_x;
  enddef;
  def map between ATP_synthesis_flux and dADP_x_dt for
    vars V_F1 and V_F1;
  enddef;
  def map between dADP_x_dt and ANT_flux for
    vars V_ANT and V_ANT;
  enddef;
  def map between dPi_x_dt and Environment for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dPi_x_dt for
    vars W_x and W_x;
  enddef;
  def map between ANT_flux and ADP for
    vars V_ANT and V_ANT;
  enddef;
  def map between Environment and dPsi_dt for
    vars t and t;
  enddef;
  def map between Fixed_parameters and dPsi_dt for
    vars n_A and n_A;
  enddef;
  def map between Electron_flux_complex_I and dPsi_dt for
    vars V_C1 and V_C1;
  enddef;
  def map between Electron_flux_complex_III and dPsi_dt for
    vars V_C3 and V_C3;
    vars dPsi and dPsi;
  enddef;
  def map between dPsi_dt and ATP_synthesis_flux for
    vars V_F1 and V_F1;
  enddef;
  def map between Fixed_parameters and NAD_x_concentration for
    vars NADtot and NADtot;
  enddef;
  def map between dNADH_x_dt and NAD_x_concentration for
    vars NADH_x and NADH_x;
  enddef;
  def map between Fixed_parameters and Q_concentration for
    vars Qtot and Qtot;
  enddef;
  def map between dQH2_dt and Q_concentration for
    vars QH2 and QH2;
  enddef;
  def map between Fixed_parameters and Cox_concentration for
    vars Ctot and Ctot;
  enddef;
  def map between dCred_dt and Cox_concentration for
    vars Cred and Cred;
  enddef;
  def map between Electron_flux_complex_III and Proton_motive_force for
    vars dG_H and dG_H;
  enddef;
  def map between Proton_motive_force and Electron_flux_complex_IV for
    vars dG_H and dG_H;
  enddef;
  def unit millisecond as
    unit second {pref: milli};
  enddef;
  def unit micrometre as
    unit metre {pref: micro};
  enddef;
  def unit micrometre_per_s as
    unit micrometre;
    unit second {expo: -1};
  enddef;
  def unit per_millivolt as
    unit millivolt {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit micromolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit kilojoule_per_mole_kelvin as
    unit joule {pref: kilo};
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit kilojoule_per_mole_millivolt as
    unit joule {pref: kilo};
    unit mole {expo: -1};
    unit millivolt {expo: -1};
  enddef;
  def unit cell as base unit;
  def unit cytoplasm as base unit;
  def unit mitochondria as base unit;
  def unit mito_per_cell as
    unit mitochondria;
    unit cell {expo: -1};
  enddef;
  def unit l_water_per_l_mito as
    unit mitochondria {expo: -1};
  enddef;
  def unit mg_per_mitochondria as
    unit gram {pref: milli};
    unit mitochondria {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit liter {expo: -1};
  enddef;
  def unit micromolar as
    unit molar {pref: micro};
  enddef;
  def unit per_micromolar as
    unit micromolar {expo: -1};
  enddef;
  def unit micron_per_second as
    unit metre {pref: -6};
    unit second {expo: -1};
  enddef;
  def unit per_micron as
    unit metre {expo: -1, pref: -6};
    unit mitochondria {expo: -1};
  enddef;
  def unit kilojoule_per_mole as
    unit joule {pref: kilo};
    unit mole {expo: -1};
  enddef;
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit kilojoule_per_mole_per_millivolt as
    unit kilojoule_per_mole;
    unit millivolt {expo: -1};
  enddef;
  def unit micromolar_per_mito as
    unit mole {pref: micro};
    unit liter {expo: -1};
    unit mitochondria {expo: -1};
  enddef;
  def unit micromole_per_second_per_l_mito as
    unit micromolar_per_mito;
    unit second {expo: -1};
  enddef;
  def unit micromole_per_second_per_l_mito_per_micromolar as
    unit micromole_per_second_per_l_mito;
    unit micromolar {expo: -1};
  enddef;
  def unit micromole_per_second_per_l_mito_per_micromolar_per_half_molar as
    unit micromole_per_second_per_l_mito_per_micromolar;
    unit micromolar {expo: -0.5};
  enddef;
  def unit micromole_per_second_per_l_mito_per_micromolar_per_micromolar as
    unit micromole_per_second_per_l_mito_per_micromolar;
    unit micromolar {expo: -1};
  enddef;
  def unit mole_per_l_mito_per_millivolt as
    unit micromolar_per_mito;
    unit millivolt {expo: -1};
  enddef;
  def unit micromole_per_second_per_l_mito_per_micromolar_per_millivolt as
    unit micromole_per_second_per_l_mito_per_micromolar;
    unit millivolt {expo: -1};
  enddef;
enddef;
